[[model]]
name: Beeler-Reuter-1977
desc: """
The 1977 Beeler Reuter model of the AP in ventricular myocytes.

Implemented in Myokit following the equations found in [1].

[1] Reconstruction of the action potential of ventricular myocardial fibres
    G.W. Beeler and H. Reuter
    1977, The Journal of Physiology

"""
# Initial values:
membrane.V = -84.622
ina.m      = 0.01
ina.h      = 0.99
ina.j      = 0.98
isi.d      = 0.003
isi.f      = 0.99
ix1.x1     = 0.0004
isi.Cai    = 2e-7

[engine]
time = 0 bind time
pace = 0 bind pace

[stimulus]
amplitude = 25 [uA/cm^2]
IStim = engine.pace * amplitude

[membrane]
C = 1 [uF/cm^2] : The membrane capacitance
dot(V) = -(1/C) * (ik1.IK1 + ix1.Ix1 + ina.INa + isi.Isi - stimulus.IStim)
    in [mV]
    desc: Membrane potential

[ina]
use membrane.V as V
gNaBar = 4 [mS/cm^2]
gNaC = 0.003 [mS/cm^2]
ENa = 50 [mV]
INa = (gNaBar * m^3 * h * j + gNaC) * (V - ENa)
    in [uA/cm^2]
    desc: The excitatory inward sodium current
dot(m) =  alpha * (1 - m) - beta * m
    alpha = (V + 47) / (1 - exp(-0.1 * (V + 47)))
    beta  = 40 * exp(-0.056 * (V + 72))
    desc: The activation parameter
dot(h) =  alpha * (1 - h) - beta * h
    alpha = 0.126 * exp(-0.25 * (V + 77))
    beta  = 1.7 / (1 + exp(-0.082 * (V + 22.5)))
    desc: An inactivation parameter
dot(j) =  alpha * (1 - j) - beta * j
    alpha = 0.055 * exp(-0.25 * (V + 78)) / (1 + exp(-0.2 * (V + 78)))
    beta  = 0.3 / (1 + exp(-0.1 * (V + 32)))
    desc: An inactivation parameter

[isi]
use membrane.V as V
gsBar = 0.09
Es = -82.3 - 13.0287 * log(Cai)
    in [mV]
Isi = gsBar * d * f * (V - Es)
    in [uA/cm^2]
    desc: """
    The slow inward current, primarily carried by calcium ions. Called either
    "iCa" or "is" in the paper.
    """
dot(d) =  alpha * (1 - d) - beta * d
    alpha = 0.095 * exp(-0.01 * (V + -5)) / (exp(-0.072 * (V + -5)) + 1)
    beta  = 0.07 * exp(-0.017 * (V + 44)) / (exp(0.05 * (V + 44)) + 1)
dot(f) = alpha * (1 - f) - beta * f
    alpha = 0.012 * exp(-0.008 * (V + 28)) / (exp(0.15 * (V + 28)) + 1)
    beta  = 0.0065 * exp(-0.02 * (V + 30)) / (exp(-0.2 * (V + 30)) + 1)
dot(Cai) = -1e-7 * Isi + 0.07 * (1e-7 - Cai)
    desc: The intracellular Calcium concentration
    in [mol/L]

[ik1]
use membrane.V as V
IK1 = 0.35 * (
        4 * (exp(0.04 * (V + 85)) - 1)
        / (exp(0.08 * (V + 53)) + exp(0.04 * (V + 53)))
        + 0.2 * (V + 23)
        / (1 - exp(-0.04 * (V + 23)))
    )
    in [uA/cm^2]
    desc: """A time-independent outward potassium current exhibiting
          inward-going rectification"""

[ix1]
use membrane.V as V
Ix1 = x1 * 0.8 * (exp(0.04 * (V + 77)) - 1) / exp(0.04 * (V + 35))
    in [uA/cm^2]
    desc: """A voltage- and time-dependent outward current, primarily carried
          by potassium ions"""
dot(x1) = alpha * (1 - x1) - beta * x1
    alpha = 0.0005 * exp(0.083 * (V + 50)) / (exp(0.057 * (V + 50)) + 1)
    beta  = 0.0013 * exp(-0.06 * (V + 20)) / (exp(-0.04 * (V + 333)) + 1)

[[protocol]]
# Level  Start    Length   Period   Multiplier
1.0      100      2        1000     0

[[script]]
import matplotlib.pyplot as plt
import numpy as np
import myokit

#
# The following example shows how to apply a step protocol without changing
# the model definition code. Instead, all necessary changes are applied through
# API calls.
#

# Get model and protocol, create simulation
m = get_model()

# Get pacing variable
p = m.get('engine.pace')
# Remove binding to pacing mechanism
p.set_binding(None)

# Get membrane potential
v = m.get('membrane.V')
# Demote v from a state to an ordinary variable
v.demote()
v.set_rhs(0)
# Bind v's value to the pacing mechanism
v.set_binding('pace')

# Create a step protocol
steps = np.arange(-70, 50, 10)
p = myokit.pacing.steptrain(
    vsteps=steps,
    vhold = -120,   # Holding potential -120mV
    tpre  = 5000,   # 5000 milliseconds pre-conditioning at Vhold
    tstep = 1000,   # 1 second at step potential
    )
t = p.characteristic_time()

# Run a simulation
s = myokit.Simulation(m, p)
d = s.run(t, log=['engine.time', 'membrane.V', 'ina.INa'])

# Split the log into smaller chunks
ds = d.split_periodic(6000, adjust=True)

# Trim each new log to contain only the 5ms of peak current
for k, d in enumerate(ds):
    ds[k] = d.trim_left(5000, adjust=True).trim_right(5)

# Show the results
plt.figure()
for k, d in enumerate(ds):
    label = str(steps[k]) + ' mV'
    plt.plot(d['engine.time'], d['ina.INa'], label=label)
plt.legend(loc='lower right')
plt.show()

