[[model]]
name: Luo-Rudy model (1991) Alpha and beta values
desc: """
Implementation of the Luo-Rudy model I for the ventricular myocyte.
Based on an updated formulation downloaded from http://rudylab.wustl.edu

Original copyright notice:
- - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - -
Copyright (C) 2006 by Leonid Livshitz and Yoram Rudy
Email rudy@wustl.edu

This program is free software; you can redistribute it and/or modify
it under the terms of the GNU General Public License as published by
the Free Software Foundation; either version 2 of the License, or
(at your option) any later version.

This program is distributed in the hope that it will be useful,
but WITHOUT ANY WARRANTY; without even the implied warranty of
MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
GNU General Public License for more details.

You should have received a copy of the GNU General Public License
along with this program; if not, write to the
Free Software Foundation, Inc.,
59 Temple Place - Suite 330, Boston, MA  02111-1307, USA.
"""

author: Michael Clerx
# Initial conditions
membrane.V = -84.5286
ina.m      = 0.0017
ina.h      = 0.9832
ina.j      = 0.995484
ica.d      = 0.000003
ica.f      = 1
ik.x       = 0.0057
ica.Ca_i   = 0.0002

# Environment variables
[engine]
time = 0 bind time
pace = 0 bind pace

# Membrane potential and stimulus
[membrane]
dot(V) =  i_stim - (ina.INa + ik.IK + ib.Ib + ikp.IKp + ik1.IK1 + ica.ICa)
    desc: The membrane potential
    in [mV]
i_stim = engine.pace * stim_amplitude
stim_amplitude = 80 [uA/cm^2]
    desc: """
    Stimulus amplitude.
    The online matlab implementation features this 80 uA/cm^2, 0.5 millisecond
    pulse. The cellml version uses a 2 millisecond 25.5 uA/cm^2 pulse.
    """

# Fast Sodium current
[ina]
use membrane.V as V
ENa = cell.RTF * log(cell.Na_o / cell.Na_i)
    desc: Nernst potential of Na
    in [mV]
a = 1 - 1 / (1 + exp(-(V + 40) / 0.24))
    desc: Used instead of if statement.
dot(m) =  alpha * (1 - m) - beta * m
    alpha = 0.32 * (V + 47.13) / (1 - exp(-0.1 * (V + 47.13)))
    beta  = 0.08 * exp(-V / 11)
    desc: """
    Activation parameter of the fast sodium channel, based on Ebihara-Johnson
    (E-J) model of cardiac cells (chicken embryo)
    """
dot(h) =  alpha * (1 - h) - beta * h
    alpha = 0.135 * exp((80 + V) / -6.8)
    beta  = a * (3.56 * exp(0.079 * V) + 3.1e5 * exp(0.35 * V)) \
          + (1 - a) / (0.13 * (1 + exp((V + 10.66) / -11.1)))
    desc: """
    (Fast) Inactivation parameter of the fast sodium channel, based on
    Ebihara-Johnson (E-J) model of cardiac cells (chicken embryo)
    """
dot(j) =  alpha * (1 - j) - beta * j
    alpha = a * ( -127140 * exp(0.2444 * V) - 3.474e-5 * exp(-0.04391 * V)) \
              * (V + 37.78) / (1 + exp(0.311 * (V + 79.23)))
    beta  = a * (0.1212 * exp(-0.01052 * V) / (1 + exp(-0.1378 * (V + 40.14)))) \
          + (1 - a) * (0.3 * exp(-2.535e-7 * V) / (1 + exp(-0.1 * (V + 32))))
    desc: """
    Slow inactivation gate. Inspired by Beeler-Reuter and Haas. Steady-state
    value (j_inf) is set to value from h gate (h_inf). Time constant obtained
    from Beeler-Reuter model.
    """
gNa = 16
INa = gNa * m^3 * h * j * (V - ENa)
    desc: Fast sodium current
    in [uA/cm^2]

# Time-dependent Potassium current
[ik]
use membrane.V as V
PNa_K = 0.01833 : Permability ratio of Na to K
gK = 0.282 * sqrt(cell.K_o / 5.4)
    in [mS/uF]
E = cell.RTF * log((cell.K_o + PNa_K * cell.Na_o) / (cell.K_i + PNa_K * cell.Na_i))
    in [mV]
xi = if(V > -100,
    2.837 * (exp(0.04 * (V + 77)) - 1) / ((V + 77) * exp(0.04 * (V + 35))),
    1)
dot(x) = alpha * (1 - x) - beta * x
    alpha = 0.0005 * exp(0.083 * (V + 50)) / (1 + exp(0.057 * (V + 50)))
    beta  = 0.0013 * exp(-0.06 * (V + 20)) / (1 + exp(-0.04 * (V + 20)))
IK = gK * xi * x * (V - E)
    desc: Time-dependent Potassium current

# Plateau Potassium current
[ikp]
use membrane.V as V
gKp = 0.0183
IKp = gKp * (V + 87.8789) / (1 + exp((7.488 - V) / 5.98))
    desc: Plateau Potassium current

# Slow inward Calcium current
[ica]
use membrane.V as V
dot(Ca_i) =  -1e-4 * ICa + 0.07 * (1e-4 - Ca_i)
    desc: Intracellular Calcium concentration
E = 7.7 - 13.0287 * log(Ca_i / cell.Ca_o)
    desc: Nernst potential
    in [mV]
dot(d) =  alpha * (1 - d) - beta * d
    alpha = 0.095 * exp(-0.01 * (V - 5)) / (1 + exp(-0.072 * (V - 5)))
    beta  = 0.07 * exp(-0.017 * (V + 44)) / (1 + exp(0.05 * (V + 44)))
dot(f) =  alpha * (1-f) - beta * f
    alpha = 0.012 * exp(-0.008 * (V + 28)) / (1 + exp(0.15 * (V + 28)))
    beta  = 0.0065 * exp(-0.02 * (V + 30)) / (1 + exp(-0.2 * (V + 30)))
gCa = 0.09
ICa = gCa * d * f * (V - E)

# Time-independent potassium current
[ik1]
use membrane.V as V
E = cell.RTF * log(cell.K_o / cell.K_i)
gK1 = 0.6047 * sqrt(cell.K_o / 5.4) * alpha / (alpha + beta)
    alpha = 1.02 / (1 + exp(0.2385 * (V - E - 59.215)))
    beta  = (0.49124 * exp(0.08032 * (V - E + 5.476)) + exp(0.06175 * (V - E - 594.31)))  \
          / (1 + exp(-0.5143 * (V - E + 4.753)))
IK1 = gK1 * (V - E)

# Background current
[ib]
gb = 0.03921
Ib = gb * (membrane.V + 59.87) : Background current

# Cell parameters (ventricular mammalian cell)
[cell]
K_o = 5.4 [mM]
K_i = 145 [mM]
Na_o = 140 [mM]
Na_i = 10 [mM]
Ca_o = 1.8 [mM]
RTF = R*T/F
    R = 8314 [mJ/mol/K] : Gas constant
    T = 310 [K] : Absolute temperature
    F = 96500 [C/mol] : Faraday constant

[[protocol]]
# Level Start Length Period Multiplier
1.0     100   0.5    1000   0

[[script]]
import numpy as np
import matplotlib.pyplot as plt

#
# This, slightly programming-heavy example, uses Myokit's ability to convert
# model expressions to Python expressions that can be evaluated directly.
# Without running any simulations, we obtain functions for the Sodium channel's
# steady state and time constant variables and plot them against V.
#

# Get model
m = get_model()

# Create a range of voltages
v = np.arange(-80, 20, 0.01)

# To get a variable from the model, use
#  >>> var = m.get('component_name.variable_name')
# To convert this variable's myokit expression to a python function, use
#  >>> func = var.pyfunc()
# We know that 'ina.m.alpha' is a function of only V, so to evaluate this
# python function for a range of voltages, use
#  >>> ma = func(c)
# Or... string it all together as:
ma = m.get('ina.m.alpha').pyfunc()(v)
mb = m.get('ina.m.beta').pyfunc()(v)
ha = m.get('ina.h.alpha').pyfunc()(v)
hb = m.get('ina.h.beta').pyfunc()(v)
ja = m.get('ina.j.alpha').pyfunc()(v)
jb = m.get('ina.j.beta').pyfunc()(v)

# Define a function to create a subplot
def sp(r,c,idx,x,y,name):
    plt.subplot(r,c,idx)
    plt.plot(x,y)
    plt.title(name)
    plt.ylim([0.0, None])

# Create a new figure, and set the subplot spacing
fig = plt.figure()
fig.subplots_adjust(left=0.1, bottom=0.05, top=0.95, right=0.96,
                wspace=0.3, hspace=0.4)

# Create a number of subplots
sp(3,2,1, v, ma, 'm alpha')
sp(3,2,2, v, mb, 'm beta')
sp(3,2,3, v, ha, 'h alpha')
sp(3,2,4, v, hb, 'h beta')
sp(3,2,5, v, ja, 'j alpha')
sp(3,2,6, v, jb, 'j beta')

# Calculate steady state values and time constants
mt = 1.0 / (ma + mb)
ht = 1.0 / (ha + hb)
jt = 1.0 / (ja + jb)
mi = ma * mt
hi = ha * ht
ji = ja * jt

# Create a new figure
fig = plt.figure()
fig.subplots_adjust(left=0.1, bottom=0.05, top=0.95, right=0.96,
                wspace=0.3, hspace=0.4)

# Show the steady state values and subplots
plt.subplot(121)
plt.title('Steady state values')
plt.plot(v, mi, label='mi')
plt.plot(v, hi, label='hi')
plt.plot(v, ji, label='ji')
plt.legend()
plt.ylim([0,None])

plt.subplot(122)
plt.title('Time constants')
plt.plot(v, mt, label='mt')
plt.plot(v, ht, label='ht')
plt.plot(v, jt, label='jt')
plt.legend()
plt.ylim([0,None])

# Display the created figures
plt.show()

