[[model]]
name: Luo-Rudy model I (1991)
desc: """
Implementation of the Luo-Rudy model I for the ventricular myocyte.
Based on an updated formulation downloaded from http://rudylab.wustl.edu

Original copyright notice:
- - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - -
Copyright (C) 2006 by Leonid Livshitz and Yoram Rudy
Email rudy@wustl.edu

This program is free software; you can redistribute it and/or modify
it under the terms of the GNU General Public License as published by
the Free Software Foundation; either version 2 of the License, or
(at your option) any later version.

This program is distributed in the hope that it will be useful,
but WITHOUT ANY WARRANTY; without even the implied warranty of
MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
GNU General Public License for more details.

You should have received a copy of the GNU General Public License
along with this program; if not, write to the
Free Software Foundation, Inc.,
59 Temple Place - Suite 330, Boston, MA  02111-1307, USA.
"""
author: Michael Clerx
# Initial conditions
membrane.V = -84.5286
ina.m      = 0.0017
ina.h      = 0.9832
ina.j      = 0.995484
ica.d      = 0.000003
ica.f      = 1
ik.x       = 0.0057
ica.Ca_i   = 0.0002

# Environment variables
[engine]
time = 0 bind time
pace = 0 bind pace

# Membrane potential and stimulus
[membrane]
dot(V) =  i_stim - (ina.INa + ik.IK + ib.Ib + ikp.IKp + ik1.IK1 + ica.ICa)
    desc: The membrane potential
    in [mV]
i_stim = engine.pace * stim_amplitude
stim_amplitude = 80 [uA/cm^2]
    desc: """
    Stimulus amplitude.
    The online matlab implementation features this 80 uA/cm^2, 0.5 millisecond
    pulse. The cellml version uses a 2 millisecond 25.5 uA/cm^2 pulse.
    """

# Fast Sodium current
[ina]
use membrane.V as V
ENa = cell.RTF * log(cell.Na_o / cell.Na_i)
    desc: Nernst potential of Na
    in [mV]
a = 1 - 1 / (1 + exp(-(V + 40) / 0.24))
    desc: Used instead of if statement.
dot(m) =  alpha * (1 - m) - beta * m
    alpha = 0.32 * (V + 47.13) / (1 - exp(-0.1 * (V + 47.13)))
    beta  = 0.08 * exp(-V / 11)
    desc: """
    Activation parameter of the fast sodium channel, based on Ebihara-Johnson
    (E-J) model of cardiac cells (chicken embryo)
    """
dot(h) =  alpha * (1 - h) - beta * h
    alpha = a * 0.135 * exp((80 + V) / -6.8)
    beta  = a * (3.56 * exp(0.079 * V) + 3.1e5 * exp(0.35 * V)) \
          + (1 - a) / (0.13 * (1 + exp((V + 10.66) / -11.1)))
    desc: """
    (Fast) Inactivation parameter of the fast sodium channel, based on
    Ebihara-Johnson (E-J) model of cardiac cells (chicken embryo)
    """
dot(j) =  alpha * (1 - j) - beta * j
    alpha = a * ( -127140 * exp(0.2444 * V) - 3.474e-5 * exp(-0.04391 * V)) \
              * (V + 37.78) / (1 + exp(0.311 * (V + 79.23)))
    beta  = a * (0.1212 * exp(-0.01052 * V) / (1 + exp(-0.1378 * (V + 40.14)))) \
          + (1 - a) * (0.3 * exp(-2.535e-7 * V) / (1 + exp(-0.1 * (V + 32))))
    desc: """
    Slow inactivation gate. Inspired by Beeler-Reuter and Haas. Steady-state
    value (j_inf) is set to value from h gate (h_inf). Time constant obtained
    from Beeler-Reuter model.
    """
gNa = 16
INa = gNa * m^3 * h * j * (V - ENa)
    desc: Fast sodium current
    in [uA/cm^2]

# Time-dependent Potassium current
[ik]
use membrane.V as V
PNa_K = 0.01833 : Permability ratio of Na to K
gK = 0.282 * sqrt(cell.K_o / 5.4)
    in [mS/uF]
E = cell.RTF * log((cell.K_o + PNa_K * cell.Na_o) / (cell.K_i + PNa_K * cell.Na_i))
    in [mV]
xi = if(V > -100,
    2.837 * (exp(0.04 * (V + 77)) - 1) / ((V + 77) * exp(0.04 * (V + 35))),
    1)
dot(x) = alpha * (1 - x) - beta * x
    alpha = 0.0005 * exp(0.083 * (V + 50)) / (1 + exp(0.057 * (V + 50)))
    beta  = 0.0013 * exp(-0.06 * (V + 20)) / (1 + exp(-0.04 * (V + 20)))
IK = gK * xi * x * (V - E)
    desc: Time-dependent Potassium current

# Plateau Potassium current
[ikp]
use membrane.V as V
gKp = 0.0183
IKp = gKp * (V + 87.8789) / (1 + exp((7.488 - V) / 5.98))
    desc: Plateau Potassium current

# Slow inward Calcium current
[ica]
use membrane.V as V
dot(Ca_i) =  -1e-4 * ICa + 0.07 * (1e-4 - Ca_i)
    desc: Intracellular Calcium concentration
E = 7.7 - 13.0287 * log(Ca_i / cell.Ca_o)
    desc: Nernst potential
    in [mV]
dot(d) =  alpha * (1 - d) - beta * d
    alpha = 0.095 * exp(-0.01 * (V - 5)) / (1 + exp(-0.072 * (V - 5)))
    beta  = 0.07 * exp(-0.017 * (V + 44)) / (1 + exp(0.05 * (V + 44)))
dot(f) =  alpha * (1-f) - beta * f
    alpha = 0.012 * exp(-0.008 * (V + 28)) / (1 + exp(0.15 * (V + 28)))
    beta  = 0.0065 * exp(-0.02 * (V + 30)) / (1 + exp(-0.2 * (V + 30)))
gCa = 0.09
ICa = gCa * d * f * (V - E)

# Time-independent potassium current
[ik1]
use membrane.V as V
E = cell.RTF * log(cell.K_o / cell.K_i)
gK1 = 0.6047 * sqrt(cell.K_o / 5.4) * alpha / (alpha + beta)
    alpha = 1.02 / (1 + exp(0.2385 * (V - E - 59.215)))
    beta  = (0.49124 * exp(0.08032 * (V - E + 5.476)) + exp(0.06175 * (V - E - 594.31)))  \
          / (1 + exp(-0.5143 * (V - E + 4.753)))
IK1 = gK1 * (V - E)

# Background current
[ib]
gb = 0.03921
Ib = gb * (membrane.V + 59.87) : Background current

# Cell parameters (ventricular mammalian cell)
[cell]
K_o = 5.4 [mM]
K_i = 145 [mM]
Na_o = 140 [mM]
Na_i = 10 [mM]
Ca_o = 1.8 [mM]
RTF = R*T/F
    R = 8314 [mJ/mol/K] : Gas constant
    T = 310 [K] : Absolute temperature
    F = 96500 [C/mol] : Faraday constant

[[protocol]]
# Level Start Length Period Multiplier
1.0     100   0.5    1000   0

[[script]]
import myokit
import numpy as np
import matplotlib.pyplot as plt

#
# This example demonstrates Myokit's ability to calculate not just solutions to
# ODE systems, but also their derivatives with respect to selected independent
# variables. This is implemented using the CVODES solver.
#

# Load the model and protocol
m = get_model()
p = get_protocol()

# Select which sensitivities dy/dx to calculate, where dy are the dependent
# variables (states or state-derived values like curents), and where dx are
# independent variables (literals, or initial values).
dy = ['membrane.V']
dx = ['init(membrane.V)', 'init(ica.Ca_i)', 'ikp.gKp']

# Run a simulation
s = myokit.Simulation(m, p, sensitivities=(dy, dx))
d, e = s.run(600, log_interval=5)
e = np.array(e)

# Plot the results
fig = plt.figure()
fig.suptitle('Sensitivity to initial conditions')

ax = fig.add_subplot(3, 1, 1)
ax.set_ylabel('Vm')
ax.plot(d.time(), d['membrane.V'])

ax = fig.add_subplot(3, 1, 2)
ax.plot(d.time(), e[:, 0, 0], label='dV/dV0')
ax.plot(d.time(), e[:, 0, 1], label='dV/dCa0')
ax.legend(loc='lower right', ncol=2)

ax = fig.add_subplot(3, 1, 3)
ax.plot(d.time(), e[:, 0, 2], label='dV/dgKp')
ax.legend(loc='lower right', ncol=2)

plt.show()

