/*
This file was generated by Myokit.

author: Michael Clerx
desc: Sampson et al. model of the human Purkinje cell

Based on the fortran code published as data supplement to [1].

[1] Sampson, Iyer, Marks, Kass (2010) A computational model of Purkinje fibre
    single cell electrophysiology: implications for the long QT syndrome
    Journal of Physiology
    http://dx.doi.org/10.1113/jphysiol.2010.187328
name: Sampson2010

*/

V; .nodal(); .external(Vm);
Iion; .nodal(); .external();

V_init = -80.0;
Nai_init = 12.0;
Ki_init = 122.0;
Cai_init = 7.5e-05;
CaNSR_init = 0.26;
CaSS_init = 0.00012;
CaJSR_init = 0.26;
C1_RyR_init = 0.47;
O1_RyR_init = 0.00063;
C2_RyR_init = 0.53;
O2_RyR_init = 2.6e-09;
C0_init = 0.9;
C1_1_init = 0.0;
C2_1_init = 0.0;
C3_1_init = 0.0;
C4_init = 0.0;
Open_init = 0.0;
CCa0_init = 0.0;
CCa1_init = 0.0;
CCa2_init = 0.0;
CCa3_init = 0.0;
CCa4_init = 0.0;
yCa_init = 0.99;
HTRPNCa_init = 0.97;
LTRPNCa_init = 0.071;
C0Kv43_init = 0.9;
C1Kv43_init = 0.1;
C2Kv43_init = 0.0;
C3Kv43_init = 0.0;
OKv43_init = 0.0;
CI0Kv43_init = 0.0;
CI1Kv43_init = 0.0;
CI2Kv43_init = 0.0;
CI3Kv43_init = 0.0;
OIKv43_init = 0.0;
C1Herg_init = 0.8;
C2Herg_init = 0.2;
C3Herg_init = 0.0;
OHerg_init = 0.0;
IHerg_init = 0.0;
xs_wt_init = 0.29;
xf_wt_init = 0.74;
C3_2_init = 0.6;
C2_2_init = 0.0;
C1_2_init = 0.0;
IC3_init = 0.3;
IC2_init = 0.0;
IF_init = 0.0;
IS1_init = 0.0;
IS2_init = 0.1;
BC3_init = 0.0;
BC2_init = 0.0;
BC1_init = 0.0;
BO_init = 0.0;
hcn1_init = 0.3;
hcn2_init = 0.4;
hcn3_init = 0.3;
hcn4_init = 0.0;
hcn5_init = 0.0;
hcn6_init = 0.0;
hcn7_init = 0.0;
hcn8_init = 0.0;
hcn9_init = 0.0;
C3na1_init = 0.4;
C2na1_init = 0.0;
C1na1_init = 0.0;
IC3na1_init = 0.1;
IC2na1_init = 0.0;
IFna1_init = 0.0;
IS1na1_init = 0.0;
IS2na1_init = 0.5;
BC3na1_init = 0.0;
BC2na1_init = 0.0;
BC1na1_init = 0.0;
BOna1_init = 0.0;
BIFna1_init = 0.0;
nCa32_init = 0.0021;
lCa32_init = 0.55;

// caflux
diff_HTRPNCa = dot_HTRPNCa;
Jtr = (CaNSR - CaJSR) / tautr;
tautr = 0.5747;
Jtrpn = LTRPNtot * dot_LTRPNCa + HTRPNtot * dot_HTRPNCa;
HTRPNtot = 0.14;
LTRPNtot = 0.07;
Jxfer = (CaSS - Cai) / tauxfer;
tauxfer = 26.7;
diff_LTRPNCa = dot_LTRPNCa;
dot_HTRPNCa = khtrpn_plus * Cai * (1.0 - HTRPNCa) - a1_1;
a1_1 = khtrpn_minus * HTRPNCa;
khtrpn_minus = 6.6e-05;
khtrpn_plus = 20.0;
dot_LTRPNCa = kltrpn_plus * Cai * (1.0 - LTRPNCa) - a1_2;
a1_2 = kltrpn_minus * LTRPNCa;
kltrpn_minus = 0.04;
kltrpn_plus = 40.0;

// calcium
CMDNtot = 0.05;
diff_CaJSR = calcium_beta_JSR * (Jtr - Jrel);
diff_CaNSR = Jup * Vmyo / VNSR - Jtr * VJSR / VNSR;
diff_CaSS = calcium_beta_SS * (a3_1 - ICa * a2_1 - ICa32 * a2_1);
a3_1 = Jrel * VJSR / VSS - Jxfer * Vmyo / VSS;
diff_Cai = calcium_beta_i * (Jxfer - Jup - Jtrpn - a3_2 * 0.5 * a1_3);
a3_2 = -2.0 * INaCa + IpCa;
EGTAtot = 0.0;
KmCMDN = 0.00238;
KmEGTA = 0.00015;
calcium_beta_JSR = 1.0 / (1.0 + b1_1);
CSQNtot = 15.0;
KmCSQN = 0.8;
b1_1 = CSQNtot * KmCSQN / pow(CaJSR + KmCSQN, 2.0);
calcium_beta_SS = 1.0 / (1.0 + b1_2 + b2_1);
b1_2 = CMDNtot * KmCMDN / pow(CaSS + KmCMDN, 2.0);
b2_1 = EGTAtot * KmEGTA / pow(CaSS + KmEGTA, 2.0);
calcium_beta_i = 1.0 / (1.0 + b1_3 + b2_2);
b1_3 = CMDNtot * KmCMDN / pow(Cai + KmCMDN, 2.0);
b2_2 = EGTAtot * KmEGTA / pow(Cai + KmEGTA, 2.0);

// cell
Acap = 0.0003912;
Cao = 2.0;
Ko = 4.0;
Nao = 138.0;
VJSR = 1.36e-07;
VNSR = 1.785e-06;
VSS = 1.08e-09;
Vmyo = 2.196e-05;
a1_3 = Acap / (Vmyo * Faraday * 1000.0);
a2_1 = Acap / (2.0 * VSS * Faraday * 1000.0);

// ical
diff_C0 = a2_2 - a1_4;
a1_4 = (C0_to_C1 + C0_to_CCa0) * C0;
a2_2 = C1_to_C0 * C1_1 + CCa0_to_C0 * CCa0;
C0_to_C1 = 4.0 * ical_alpha;
C0_to_CCa0 = gamma;
diff_C1_1 = a2_3 - a1_5;
a1_5 = (C1_to_C0 + C1_to_C2 + C1_to_CCa1) * C1_1;
a2_3 = C0_to_C1 * C0 + C2_to_C1 * C2_1 + CCa1_to_C1 * CCa1;
C1_to_C0 = ical_beta;
C1_to_C2 = 3.0 * ical_alpha;
C1_to_CCa1 = aL * C0_to_CCa0;
diff_C2_1 = a2_4 - a1_6;
a1_6 = (C2_to_C1 + C2_to_C3 + C2_to_CCa2) * C2_1;
a2_4 = C1_to_C2 * C1_1 + C3_to_C2 * C3_1 + CCa2_to_C2 * CCa2;
C2_to_C1 = 2.0 * ical_beta;
C2_to_C3 = 2.0 * ical_alpha;
C2_to_CCa2 = aL * C1_to_CCa1;
diff_C3_1 = a2_5 - a1_7;
a1_7 = (C3_to_C2 + C3_to_C4 + C3_to_CCa3) * C3_1;
a2_5 = C2_to_C3 * C2_1 + C4_to_C3 * C4 + CCa3_to_C3 * CCa3;
C3_to_C2 = 3.0 * ical_beta;
C3_to_C4 = ical_alpha;
C3_to_CCa3 = aL * C2_to_CCa2;
diff_C4 = a2_6 - a1_8;
a1_8 = (C4_to_C3 + fL + C4_to_CCa4) * C4;
a2_6 = C3_to_C4 * C3_1 + gL * Open + CCa4_to_C4 * CCa4;
C4_to_C3 = 4.0 * ical_beta;
C4_to_CCa4 = aL * C3_to_CCa3;
diff_CCa0 = a2_7 - a1_9;
a1_9 = (CCa0_to_CCa1 + CCa0_to_C0) * CCa0;
a2_7 = CCa1_to_CCa0 * CCa1 + C0_to_CCa0 * C0;
CCa0_to_C0 = omega;
omega = 0.0025;
CCa0_to_CCa1 = 4.0 * ical_alpha_prime;
diff_CCa1 = a2_8 - a1_10;
a1_10 = (CCa1_to_CCa0 + CCa1_to_CCa2 + CCa1_to_C1) * CCa1;
a2_8 = CCa0_to_CCa1 * CCa0 + CCa2_to_CCa1 * CCa2 + C1_to_CCa1 * C1_1;
CCa1_to_C1 = CCa0_to_C0 / bL;
CCa1_to_CCa0 = ical_beta_prime;
CCa1_to_CCa2 = 3.0 * ical_alpha_prime;
diff_CCa2 = a2_9 - a1_11;
a1_11 = (CCa2_to_CCa1 + CCa2_to_CCa3 + CCa2_to_C2) * CCa2;
a2_9 = CCa1_to_CCa2 * CCa1 + CCa3_to_CCa2 * CCa3 + C2_to_CCa2 * C2_1;
CCa2_to_C2 = CCa1_to_C1 / bL;
CCa2_to_CCa1 = 2.0 * ical_beta_prime;
CCa2_to_CCa3 = 2.0 * ical_alpha_prime;
diff_CCa3 = a2_10 - a1_12;
a1_12 = (CCa3_to_CCa2 + CCa3_to_CCa4 + CCa3_to_C3) * CCa3;
a2_10 = CCa2_to_CCa3 * CCa2 + CCa4_to_CCa3 * CCa4 + C3_to_CCa3 * C3_1;
CCa3_to_C3 = CCa2_to_C2 / bL;
CCa3_to_CCa2 = 3.0 * ical_beta_prime;
CCa3_to_CCa4 = ical_alpha_prime;
diff_CCa4 = a2_11 - a1_13;
a1_13 = (CCa4_to_CCa3 + CCa4_to_C4) * CCa4;
a2_11 = CCa3_to_CCa4 * CCa3 + C4_to_CCa4 * C4;
CCa4_to_C4 = CCa3_to_C3 / bL;
CCa4_to_CCa3 = 4.0 * ical_beta_prime;
ICa = ICamax * yCa * Open;
ICaK = PKprime * Open * yCa * VFFRT * (a1_14 / a2_12);
a1_14 = Ki * exp(VFRT) - Ko;
a2_12 = expm1(VFRT);
ICahalf = -0.265;
ICamax = PCa * 4.0 * VFFRT * (a1_15 / a2_13);
a1_15 = 0.001 * exp(2.0 * VFRT) - Cao * 0.341;
a2_13 = expm1(2.0 * VFRT);
diff_Open = fL * C4 - gL * Open;
PCa = Pscale * 0.0002469;
PK = Pscale * 4.574e-07;
PKprime = PK / (1.0 + imax / ICahalf);
imax = ((ICamax > 0.0) ? 0.0 : ICamax);
Pscale = 1.8;
aL = 2.0;
ical_alpha = 4.0 * 1.2 * 0.416 * exp(0.012 * (V - 35.0));
ical_alpha_prime = aL * ical_alpha;
bL = 2.0;
ical_beta = 4.0 * 0.45 * 0.049 * exp(-0.065 * (V - 22.0));
ical_beta_prime = ical_beta / bL;
fL = 0.3;
gL = 4.0;
gamma = 0.6 * 0.09233 * CaSS;
tau_yCa = 1.0 / (3.36336209451999985e-03 / (0.5 + exp(V / -5.53899874036055007e+00)) + 7.79046570737000014e-03 * exp(V / -4.95103963116038628e+01));
yCa_inf = a1_16 / (1.0 + exp((V + 28.5) / 7.8)) + (1.0 - a1_16);
a1_16 = 0.82;

// icat
ICa32 = ICamax / PCa * Ttypescale * nCa32 * nCa32 * lCa32;
Ttypescale = 7.56140000000000014e-06;
lCa32_inf = 1.0 / (1.0 + exp((V + 75.6) / 6.2));
tau_lCa32 = ((V < -60.0) ? 500.0 : 18.3 + 0.005 * exp(-V / 6.2));
nCa32_inf = 1.0 / (1.0 + exp(-(V + 48.4) / 5.2));
tau_nCa32 = ((V < -56.0) ? 2.44 * exp((V + 120.0) / 40.0) : 1.34 + 0.035 * exp(-V / 11.8));

// ihcn
IHCN = IHCNmax * (hcn6 + hcn7 + hcn8 + hcn9 + hcn10) * (V - (ENa / 3.0 + 2.0 * EK / 3.0));
IHCNmax = 0.3225;
h_alpha = 0.0001712 * exp(-1.465 * VFRT) / 1000.0;
h_beta = 26.17 * exp(1.465 * VFRT) / 1000.0;
h_delta = 287.5 * exp(1.242 * VFRT) / 1000.0;
h_f = 2.2361;
h_gamma = 0.04025 * exp(-1.242 * VFRT) / 1000.0;
diff_hcn1 = -(4.0 * h_gamma + h_alpha) * hcn1 + h_delta * hcn2 + h_beta * hcn6;
hcn10 = 1.0 - hcn1 - hcn2 - hcn3 - hcn4 - hcn5 - hcn6 - hcn7 - hcn8 - hcn9;
diff_hcn2 = -(h_delta + 3.0 * h_gamma + h_alpha * h_f) * hcn2 + 4.0 * h_gamma * hcn1 + 2.0 * h_delta * hcn3 + h_beta / h_f * hcn7;
diff_hcn3 = -(2.0 * h_delta + 2.0 * h_gamma + h_alpha * pow(h_f, 2.0)) * hcn3 + 3.0 * h_gamma * hcn2 + 3.0 * h_delta * hcn4 + h_beta / pow(h_f, 2.0) * hcn8;
diff_hcn4 = -(3.0 * h_delta + h_gamma + h_alpha * pow(h_f, 3.0)) * hcn4 + 2.0 * h_gamma * hcn3 + 4.0 * h_delta * hcn5 + h_beta / pow(h_f, 3.0) * hcn9;
diff_hcn5 = -(4.0 * h_delta + h_alpha * pow(h_f, 4.0)) * hcn5 + h_gamma * hcn4 + h_beta / pow(h_f, 4.0) * hcn10;
diff_hcn6 = -(h_beta + 4.0 * h_gamma * h_f) * hcn6 + h_alpha * hcn1 + h_delta / h_f * hcn7;
diff_hcn7 = -(h_beta / h_f + h_delta / h_f + 3.0 * h_gamma * h_f) * hcn7 + h_alpha * h_f * hcn2 + 4.0 * h_gamma * h_f * hcn6 + 2.0 * h_delta / h_f * hcn8;
diff_hcn8 = -(h_beta / pow(h_f, 2.0) + 2.0 * h_delta / h_f + 2.0 * h_gamma * h_f) * hcn8 + h_alpha * pow(h_f, 2.0) * hcn3 + 3.0 * h_gamma * h_f * hcn7 + 3.0 * h_delta / h_f * hcn9;
diff_hcn9 = -(h_beta / pow(h_f, 3.0) + 3.0 * h_delta / h_f + h_gamma * h_f) * hcn9 + h_alpha * pow(h_f, 3.0) * hcn4 + 2.0 * h_gamma * h_f * hcn8 + 4.0 * h_delta / h_f * hcn10;

// ik1
IK1 = GK1 * sqrt(Ko) * K1_inf_var * (V - EK);
GK1 = 0.0226;
K1_inf_var = 1.0 / (0.9681 + exp((V + 82.18623) / 15.88642));

// ikr
A0_HERG = 1.71476417330859998e-02;
A1_HERG = 3.96932838114099976e-02;
A2_HERG = 2.05744860597700009e-02;
A3_HERG = 1.34366604422999996e-03;
A4_HERG = 1.06663164912879999e-01;
A5_HERG = 6.46393910049000014e-03;
A6_HERG = 8.03937440300000057e-05;
B0_HERG = 3.30460803883500034e-02;
B1_HERG = -4.30605416397999985e-02;
B2_HERG = 2.61741271511800010e-02;
B3_HERG = -2.69138549839900015e-02;
B4_HERG = 5.68908859717000021e-03;
B5_HERG = -4.53664295954299968e-02;
B6_HERG = 6.98089239999999969e-07;
C1H_to_C2H = T_Const_HERG * A0_HERG * exp(B0_HERG * V);
diff_C1Herg = C2H_to_C1H * C2Herg - C1H_to_C2H * C1Herg;
C2H_to_C1H = T_Const_HERG * A1_HERG * exp(B1_HERG * V);
C2H_to_C3H = T_Const_HERG * 2.60836204333700014e-02;
diff_C2Herg = a1_17 - a2_14;
a1_17 = C1H_to_C2H * C1Herg + C3H_to_C2H * C3Herg;
a2_14 = (C2H_to_C1H + C2H_to_C3H) * C2Herg;
C3H_to_C2H = T_Const_HERG * 1.48329781321449999e-01;
C3H_to_IH = T_Const_HERG * A6_HERG * exp(B6_HERG * V);
C3H_to_OH = T_Const_HERG * A2_HERG * exp(B2_HERG * V);
diff_C3Herg = a1_18 - a2_15;
a1_18 = C2H_to_C3H * C2Herg + OH_to_C3H * OHerg + IH_to_C3H * IHerg;
a2_15 = (C3H_to_IH + C3H_to_OH + C3H_to_C2H) * C3Herg;
IH_to_C3H = OH_to_C3H * IH_to_OH * C3H_to_IH / (C3H_to_OH * OH_to_IH);
IH_to_OH = T_Const_HERG * A5_HERG * exp(B5_HERG * V);
diff_IHerg = a1_19 - a2_16;
a1_19 = C3H_to_IH * C3Herg + OH_to_IH * OHerg;
a2_16 = (IH_to_C3H + IH_to_OH) * IHerg;
IKr = GKr * fKo * OHerg * (V - EK);
GKr = 0.0383724;
fKo = sqrt(Ko / 4.0);
OH_to_C3H = T_Const_HERG * A3_HERG * exp(B3_HERG * V);
OH_to_IH = T_Const_HERG * A4_HERG * exp(B4_HERG * V);
diff_OHerg = a1_20 - a2_17;
a1_20 = C3H_to_OH * C3Herg + IH_to_OH * IHerg;
a2_17 = (OH_to_C3H + OH_to_IH) * OHerg;
T_Const_HERG = 5.32000000100000037e+00;

// iks
GKs = 2.80819022457099998e-02;
IKs = GKs * (xs_wt * xf_wt) * (V - EK);
alpha_xf_wt = ((V == 21.0) ? 0.000146 / 0.078 : 0.000146 * (V - 21.0) / (-expm1(-0.078 * (V - 21.0))));
beta_xf_wt = 0.00091 * exp(-0.028 * V);
alpha_xs_wt = ((V == -11.0) ? 3.3e-05 / 0.13 : 3.3e-05 * (V + 11.0) / (-expm1(-0.13 * (V + 11.0))));
beta_xs_wt = 0.0001 * exp(-0.015 * V);

// inaca
INaCa = kNaCa * a5_1 * (a1_21 - a2_18) / (a4_1 * a3_3);
KmCa = 1.38;
KmNa = 87.5;
a1_21 = exp(eta * VFRT) * pow(Nai, 3.0) * Cao;
a2_18 = exp((eta - 1.0) * VFRT) * nao3 * Cai;
a3_3 = 1.0 + ksat * exp((eta - 1.0) * VFRT);
a4_1 = KmCa + Cao;
a5_1 = 5000.0 / (pow(KmNa, 3.0) + nao3);
eta = 0.35;
kNaCa = 0.44;
ksat = 0.2;
nao3 = pow(Nao, 3.0);

// inak
INaK = INaKmax * fNaK * (a1_22 / a2_19);
INaKmax = 1.5;
a1_22 = Ko / (Ko + KmKo);
a2_19 = 1.0 + pow(KmNai / Nai, 1.5);
KmKo = 1.5;
KmNai = 20.0;
fNaK = 1.0 / (a1_23 + a2_20);
a1_23 = 1.0 + 0.1245 * exp(-0.1 * VFRT);
a2_20 = 0.0365 * sigma * exp(-1.33 * VFRT);
sigma = (expm1(Nao / 67.3)) / 7.0;

// ipca
IpCa = IpCamax * Cai / (KmpCa + Cai);
IpCamax = 0.05;
KmpCa = 0.0005;

// isus
Isus = Isusmax * (1.0 / (1.0 + exp(-(V - 20.0) / 12.0))) * (V - EK);
Isusmax = 0.0919908;

// ito
diff_C0Kv43 = a2_21 - a1_24;
a1_24 = (C0Kv43_to_C1Kv43 + C0Kv43_to_CI0Kv43) * C0Kv43;
a2_21 = C1Kv43_to_C0Kv43 * C1Kv43 + CI0Kv43_to_C0Kv43 * CI0Kv43;
C0Kv43_to_C1Kv43 = 4.0 * ito_alpha_act43;
C0Kv43_to_CI0Kv43 = ito_beta_inact43;
diff_C1Kv43 = a2_22 - a1_25;
a1_25 = (C1Kv43_to_C2Kv43 + C1Kv43_to_C0Kv43 + C1Kv43_to_CI1Kv43) * C1Kv43;
a2_22 = C2Kv43_to_C1Kv43 * C2Kv43 + CI1Kv43_to_C1Kv43 * CI1Kv43 + C0Kv43_to_C1Kv43 * C0Kv43;
C1Kv43_to_C0Kv43 = ito_beta_act43;
C1Kv43_to_C2Kv43 = 3.0 * ito_alpha_act43;
C1Kv43_to_CI1Kv43 = f1Kv43 * ito_beta_inact43;
diff_C2Kv43 = a2_23 - a1_26;
a1_26 = (C2Kv43_to_C3Kv43 + C2Kv43_to_C1Kv43 + C2Kv43_to_CI2Kv43) * C2Kv43;
a2_23 = C3Kv43_to_C2Kv43 * C3Kv43 + CI2Kv43_to_C2Kv43 * CI2Kv43 + C1Kv43_to_C2Kv43 * C1Kv43;
C2Kv43_to_C1Kv43 = 2.0 * ito_beta_act43;
C2Kv43_to_C3Kv43 = 2.0 * ito_alpha_act43;
C2Kv43_to_CI2Kv43 = f2Kv43 * ito_beta_inact43;
diff_C3Kv43 = a2_24 - a1_27;
a1_27 = (C3Kv43_to_OKv43 + C3Kv43_to_C2Kv43 + C3Kv43_to_CI3Kv43) * C3Kv43;
a2_24 = OKv43_to_C3Kv43 * OKv43 + CI3Kv43_to_C3Kv43 * CI3Kv43 + C2Kv43_to_C3Kv43 * C2Kv43;
C3Kv43_to_C2Kv43 = 3.0 * ito_beta_act43;
C3Kv43_to_CI3Kv43 = f3Kv43 * ito_beta_inact43;
C3Kv43_to_OKv43 = ito_alpha_act43;
diff_CI0Kv43 = a2_25 - a1_28;
a1_28 = (CI0Kv43_to_C0Kv43 + CI0Kv43_to_CI1Kv43) * CI0Kv43;
a2_25 = C0Kv43_to_CI0Kv43 * C0Kv43 + CI1Kv43_to_CI0Kv43 * CI1Kv43;
CI0Kv43_to_C0Kv43 = ito_alpha_inact43;
CI0Kv43_to_CI1Kv43 = 4.0 * b1Kv43 * ito_alpha_act43;
diff_CI1Kv43 = a2_26 - a1_29;
a1_29 = (CI1Kv43_to_CI2Kv43 + CI1Kv43_to_C1Kv43 + CI1Kv43_to_CI0Kv43) * CI1Kv43;
a2_26 = CI2Kv43_to_CI1Kv43 * CI2Kv43 + C1Kv43_to_CI1Kv43 * C1Kv43 + CI0Kv43_to_CI1Kv43 * CI0Kv43;
CI1Kv43_to_C1Kv43 = ito_alpha_inact43 / b1Kv43;
CI1Kv43_to_CI0Kv43 = ito_beta_act43 / f1Kv43;
CI1Kv43_to_CI2Kv43 = 3.0 * b2Kv43 * ito_alpha_act43 / b1Kv43;
diff_CI2Kv43 = a2_27 - a1_30;
a1_30 = (CI2Kv43_to_CI3Kv43 + CI2Kv43_to_C2Kv43 + CI2Kv43_to_CI1Kv43) * CI2Kv43;
a2_27 = CI3Kv43_to_CI2Kv43 * CI3Kv43 + C2Kv43_to_CI2Kv43 * C2Kv43 + CI1Kv43_to_CI2Kv43 * CI1Kv43;
CI2Kv43_to_C2Kv43 = ito_alpha_inact43 / b2Kv43;
CI2Kv43_to_CI1Kv43 = 2.0 * f1Kv43 * ito_beta_act43 / f2Kv43;
CI2Kv43_to_CI3Kv43 = 2.0 * b3Kv43 * ito_alpha_act43 / b2Kv43;
diff_CI3Kv43 = a2_28 - a1_31;
a1_31 = (CI3Kv43_to_OIKv43 + CI3Kv43_to_C3Kv43 + CI3Kv43_to_CI2Kv43) * CI3Kv43;
a2_28 = OIKv43_to_CI3Kv43 * OIKv43 + C3Kv43_to_CI3Kv43 * C3Kv43 + CI2Kv43_to_CI3Kv43 * CI2Kv43;
CI3Kv43_to_C3Kv43 = ito_alpha_inact43 / b3Kv43;
CI3Kv43_to_CI2Kv43 = 3.0 * f2Kv43 * ito_beta_act43 / f3Kv43;
CI3Kv43_to_OIKv43 = b4Kv43 * ito_alpha_act43 / b3Kv43;
Ito1 = GKv43 * OKv43 * (V - EK);
GKv43 = 1.52138159999999995e-01;
diff_OIKv43 = a2_29 - a1_32;
a1_32 = (OIKv43_to_OKv43 + OIKv43_to_CI3Kv43) * OIKv43;
a2_29 = OKv43_to_OIKv43 * OKv43 + CI3Kv43_to_OIKv43 * CI3Kv43;
OIKv43_to_CI3Kv43 = 4.0 * f3Kv43 * ito_beta_act43 / f4Kv43;
OIKv43_to_OKv43 = ito_alpha_inact43 / b4Kv43;
diff_OKv43 = a2_30 - a1_33;
a1_33 = (OKv43_to_C3Kv43 + OKv43_to_OIKv43) * OKv43;
a2_30 = C3Kv43_to_OKv43 * C3Kv43 + OIKv43_to_OKv43 * OIKv43;
OKv43_to_C3Kv43 = 4.0 * ito_beta_act43;
OKv43_to_OIKv43 = f4Kv43 * ito_beta_inact43;
aaKv43 = 0.028983;
aiKv43 = 3.73015999999999994e-04;
ito_alpha_act43 = alphaa0Kv43 * exp(aaKv43 * V);
ito_alpha_inact43 = alphai0Kv43 * exp(-aiKv43 * V);
alphaa0Kv43 = 0.543708;
alphai0Kv43 = 0.0498424;
b1Kv43 = 6.77348;
b2Kv43 = 1.56212705152000009e+01;
b3Kv43 = 2.87532603313000017e+01;
b4Kv43 = 5.24576206679000052e+02;
baKv43 = 0.0468437;
ito_beta_act43 = betaa0Kv43 * exp(-baKv43 * V);
ito_beta_inact43 = betai0Kv43 * exp(biKv43 * V);
betaa0Kv43 = 0.080185;
betai0Kv43 = 8.19481999999999958e-04;
biKv43 = 5.374e-08;
f1Kv43 = 1.8936;
f2Kv43 = 1.42246474559999996e+01;
f3Kv43 = 1.58574378389000003e+02;
f4Kv43 = 1.42936645351000010e+02;

// membrane
i_ion = a1_34 + a2_31 + a3_4;
a1_34 = INa + INa1 + ICa + ICa32 + ICaK + IKr + IKs + IHCN;
a2_31 = IK1 + INaCa + INaK + Ito1 + Isus;
a3_4 = IpCa;
i_stim = 0.0 * amplitude;
amplitude = -100.0;

// nav11
diff_BC1na1 = BOna1 * b13_1 + BIFna1 * aa3 + BC2na1 * a12_1 + C1na1 * mu1_1 - BC1na1 * (a13_1 + bb3 + b12_1 + mu2_1);
diff_BC2na1 = BC1na1 * b12_1 + BC3na1 * a11_1 + C2na1 * mu1_1 - BC2na1 * (a12_1 + b11_1 + mu2_1);
diff_BC3na1 = BC2na1 * b11_1 + C3na1 * mu1_1 - BC3na1 * (a11_1 + mu2_1);
diff_BIFna1 = BC1na1 * bb3 + BOna1 * aa2 - BIFna1 * (aa3 + bb2);
diff_BOna1 = BIFna1 * bb2 + BC1na1 * a13_1 + Ona1 * mu1_1 - BOna1 * (aa2 + b13_1 + mu2_1);
diff_C1na1 = IFna1 * a3_5 + BC1na1 * mu2_1 + Ona1 * b13_1 + C2na1 * a12_1 - C1na1 * (a13_1 + b3_1 + mu1_1 + b12_1);
diff_C2na1 = IC2na1 * a3_5 + BC2na1 * mu2_1 + C1na1 * b12_1 + C3na1 * a11_1 - C2na1 * (a12_1 + b3_1 + mu1_1 + b11_1);
diff_C3na1 = IC3na1 * a3_5 + BC3na1 * mu2_1 + C2na1 * b11_1 - C3na1 * (a11_1 + b3_1 + mu1_1);
GNa1 = 9.0;
diff_IC2na1 = IFna1 * b12_1 + C2na1 * b3_1 + IC3na1 * a11_1 - IC2na1 * (a12_1 + a3_5 + b11_1);
diff_IC3na1 = IC2na1 * b11_1 + C3na1 * b3_1 - IC3na1 * (a11_1 + a3_5);
diff_IFna1 = IS1na1 * b4_1 + Ona1 * a2_32 + IC2na1 * a12_1 + C1na1 * b3_1 - IFna1 * (a4_2 + b2_3 + b12_1 + a3_5);
INa1 = GNa1 * (Ona1 + BOna1) * (V - ENa);
diff_IS1na1 = IS2na1 * b5_1 + IFna1 * a4_2 - IS1na1 * (a5_2 + b4_1);
diff_IS2na1 = IS1na1 * a5_2 - IS2na1 * b5_1;
Ona1 = 1.0 - BC1na1 - BC2na1 - BC3na1 - BIFna1 - BOna1 - C1na1 - C2na1 - C3na1 - IC2na1 - IC3na1 - IFna1 - IS1na1 - IS2na1;
a11_1 = 2.802 / (0.21 * exp(-V / 17.0) + 0.23 * exp(-V / 150.0));
a12_1 = 2.802 / (0.23 * exp(-V / 15.0) + 0.25 * exp(-V / 150.0));
a13_1 = 2.802 / (0.25 * exp(-V / 12.0) + 0.27 * exp(-V / 150.0));
a2_32 = 9.178 * exp(V / 29.68) / 4.5;
a3_5 = 3.79329999999999996e-07 * exp(-V / 7.6) * 3.0;
a4_2 = a2_32 / 100.0 * 1.5 * 0.285;
a5_2 = a2_32 / 95000.0 * 80.0;
aa2 = 0.0;
aa3 = 0.0;
b11_1 = 0.4 * exp(-V / 20.3);
b12_1 = 0.4 * exp(-(V - 5.0) / 20.3);
b13_1 = 0.4 * exp(-(V - 10.0) / 20.3) / 4.5;
b2_3 = a3_5 * a2_32 * a13_1 / (b3_1 * b13_1);
b3_1 = 0.0084 + 2e-05 * V;
b4_1 = a3_5 / 5.0;
b5_1 = a3_5 / 30.0 / 10.0;
bb2 = 0.0;
bb3 = 0.0;
mu1_1 = 4.3e-08;
mu2_1 = 0.0003;

// nav15
diff_BC1 = -BC1 * (a13_2 + b12_2 + mu2_2) + BO * b13_2 + BC2 * a12_2 + C1_2 * mu1_2;
diff_BC2 = -BC2 * (a12_2 + b11_2 + mu2_2) + BC1 * b12_2 + BC3 * a11_2 + C2_2 * mu1_2;
diff_BC3 = -BC3 * (a11_2 + mu2_2) + BC2 * b11_2 + C3_2 * mu1_2;
diff_BO = -BO * (b13_2 + mu2_2) + BC1 * a13_2 + O * mu1_2;
diff_C1_2 = -C1_2 * (a13_2 + b3_2 + mu1_2 + b12_2) + IF * a3_6 + BC1 * mu2_2 + O * b13_2 + C2_2 * a12_2;
diff_C2_2 = -C2_2 * (a12_2 + b3_2 + mu1_2 + b11_2) + IC2 * a3_6 + BC2 * mu2_2 + C1_2 * b12_2 + C3_2 * a11_2;
diff_C3_2 = -C3_2 * (a11_2 + b3_2 + mu1_2) + IC3 * a3_6 + BC3 * mu2_2 + C2_2 * b11_2;
GNa = 35.0;
diff_IC2 = -IC2 * (a12_2 + a3_6 + b11_2) + IF * b12_2 + C2_2 * b3_2 + IC3 * a11_2;
diff_IC3 = -IC3 * (a11_2 + a3_6) + IC2 * b11_2 + C3_2 * b3_2;
diff_IF = -IF * (a4_3 + b2_4 + b12_2 + a3_6) + IS1 * b4_2 + O * a2_33 + IC2 * a12_2 + C1_2 * b3_2;
INa = GNa * (O + BO) * (V - ENa);
diff_IS1 = -IS1 * (a5_3 + b4_2) + IS2 * b5_2 + IF * a4_3;
diff_IS2 = -IS2 * b5_2 + IS1 * a5_3;
O = 1.0 - BC1 - BC2 - BC3 - BO - C1_2 - C2_2 - C3_2 - IC2 - IC3 - IF - IS1 - IS2;
a11_2 = 3.802 / (0.1027 * exp(-V / 17.0) + 0.2 * exp(-V / 150.0));
a12_2 = 3.802 / (0.1027 * exp(-V / 15.0) + 0.23 * exp(-V / 150.0));
a13_2 = 3.802 / (0.1027 * exp(-V / 12.0) + 0.25 * exp(-V / 150.0));
a2_33 = 9.178 * exp(V / 29.68);
a3_6 = 3.79329999999999996e-07 * exp(-V / 7.7);
a4_3 = a2_33 / 100.0;
a5_3 = a2_33 / 95000.0;
b11_2 = 0.1917 * exp(-V / 20.3);
b12_2 = 0.2 * exp(-(V - 5.0) / 20.3);
b13_2 = 0.22 * exp(-(V - 10.0) / 20.3);
b2_4 = a3_6 * a2_33 * a13_2 / (b3_2 * b13_2);
b3_2 = 0.0084 + 2e-05 * V;
b4_2 = a3_6;
b5_2 = a3_6 / 50.0;
mu1_2 = 4.3e-08;
mu2_2 = 0.0003;

// nernst
EK = RTF * log(Ko / Ki);
ENa = RTF * log(Nao / Nai);

// phys
Faraday = 96.5;
RTF = Rgas * Temp / Faraday;
Rgas = 8.315;
Temp = 310.0;
VFFRT = 1000.0 * Faraday * VFRT;
VFRT = V / RTF;

// potassium
IK_tot = IKr + IKs + IK1 + ICaK + 2.0 * IHCN / 3.0 + Isus + i_stim - 2.0 * INaK + Ito1;
diff_Ki = -a1_3 * IK_tot;

// ryr
diff_C1_RyR = dot_C1_RyR;
diff_C2_RyR = dot_C2_RyR;
Jrel = v1 * (O1_RyR + O2_RyR) * (CaJSR - CaSS);
v1 = 1.8;
diff_O1_RyR = -(dot_C1_RyR + dot_O2_RyR + dot_C2_RyR);
diff_O2_RyR = dot_O2_RyR;
dot_C1_RyR = -kaplus * a2_34 * C1_RyR + kaminus * O1_RyR;
a2_34 = pow(CaSS * 1000.0, ncoop);
kaminus = 0.576;
kaplus = 0.01215;
ncoop = 4.0;
dot_C2_RyR = kcplus * O1_RyR - kcminus * C2_RyR;
kcminus = 0.0008;
kcplus = 0.1;
dot_O2_RyR = kbplus * a1_35 * O1_RyR - kbminus * O2_RyR;
a1_35 = pow(CaSS * 1000.0, mcoop);
kbminus = 1.93;
kbplus = 0.00405;
mcoop = 3.0;

// serca
Jup = KSR * (vmaxf * fb - vmaxr * rb) / (1.0 + fb + rb);
KSR = 1.2;
Kfb = 0.000168;
Krb = 3.29;
Nfb = 1.2;
Nrb = 1.0;
fb = pow(Cai / Kfb, Nfb);
rb = pow(CaNSR / Krb, Nrb);
vmaxf = 7.48e-05;
vmaxr = 0.000318;

// sodium
INa_tot = INa + INa1 + IHCN / 3.0 + 3.0 * (INaCa + INaK);
diff_Nai = -a1_3 * INa_tot;

// Sum of currents
Iion = i_ion + i_stim;

// Markov model
group {
  BC1;
  BC2;
  BC3;
  BO;
  C1_2;
  C2_2;
  C3_2;
  IC2;
  IC3;
  IF;
  IS1;
  IS2;
}.method(markov_be);

// Markov model
group {
  hcn1;
  hcn2;
  hcn3;
  hcn4;
  hcn5;
  hcn6;
  hcn7;
  hcn8;
  hcn9;
}.method(markov_be);

// Markov model
group {
  BC1na1;
  BC2na1;
  BC3na1;
  BIFna1;
  BOna1;
  C1na1;
  C2na1;
  C3na1;
  IC2na1;
  IC3na1;
  IFna1;
  IS1na1;
  IS2na1;
}.method(markov_be);

// Solve non-HH and non-Markov states with CVODE
group {
  Nai;
  Ki;
  Cai;
  CaNSR;
  CaSS;
  CaJSR;
  C1_RyR;
  O1_RyR;
  C2_RyR;
  O2_RyR;
  C0;
  C1_1;
  C2_1;
  C3_1;
  C4;
  Open;
  CCa0;
  CCa1;
  CCa2;
  CCa3;
  CCa4;
  HTRPNCa;
  LTRPNCa;
  C0Kv43;
  C1Kv43;
  C2Kv43;
  C3Kv43;
  OKv43;
  CI0Kv43;
  CI1Kv43;
  CI2Kv43;
  CI3Kv43;
  OIKv43;
  C1Herg;
  C2Herg;
  C3Herg;
  OHerg;
  IHerg;
}.method(cvode);

// Trace all currents and state variables
group {
  i_ion;
  i_stim;
  V;
  Nai;
  Ki;
  Cai;
  CaNSR;
  CaSS;
  CaJSR;
  C1_RyR;
  O1_RyR;
  C2_RyR;
  O2_RyR;
  C0;
  C1_1;
  C2_1;
  C3_1;
  C4;
  Open;
  CCa0;
  CCa1;
  CCa2;
  CCa3;
  CCa4;
  yCa;
  HTRPNCa;
  LTRPNCa;
  C0Kv43;
  C1Kv43;
  C2Kv43;
  C3Kv43;
  OKv43;
  CI0Kv43;
  CI1Kv43;
  CI2Kv43;
  CI3Kv43;
  OIKv43;
  C1Herg;
  C2Herg;
  C3Herg;
  OHerg;
  IHerg;
  xs_wt;
  xf_wt;
  C3_2;
  C2_2;
  C1_2;
  IC3;
  IC2;
  IF;
  IS1;
  IS2;
  BC3;
  BC2;
  BC1;
  BO;
  hcn1;
  hcn2;
  hcn3;
  hcn4;
  hcn5;
  hcn6;
  hcn7;
  hcn8;
  hcn9;
  C3na1;
  C2na1;
  C1na1;
  IC3na1;
  IC2na1;
  IFna1;
  IS1na1;
  IS2na1;
  BC3na1;
  BC2na1;
  BC1na1;
  BOna1;
  BIFna1;
  nCa32;
  lCa32;
}.trace();

// Parameters
group {
  CMDNtot;
  EGTAtot;
  KmCMDN;
  KmEGTA;
  Acap;
  Cao;
  Ko;
  Nao;
  VJSR;
  VNSR;
  VSS;
  Vmyo;
  a1_3;
  a2_1;
  CCa0_to_C0;
  CCa1_to_C1;
  CCa2_to_C2;
  CCa3_to_C3;
  CCa4_to_C4;
  ICahalf;
  PCa;
  PK;
  Pscale;
  aL;
  bL;
  fL;
  gL;
  Ttypescale;
  h_f;
  A0_HERG;
  A1_HERG;
  A2_HERG;
  A3_HERG;
  A4_HERG;
  A5_HERG;
  A6_HERG;
  B0_HERG;
  B1_HERG;
  B2_HERG;
  B3_HERG;
  B4_HERG;
  B5_HERG;
  B6_HERG;
  C2H_to_C3H;
  C3H_to_C2H;
  T_Const_HERG;
  GKs;
  KmKo;
  KmNai;
  aaKv43;
  aiKv43;
  alphaa0Kv43;
  alphai0Kv43;
  b1Kv43;
  b2Kv43;
  b3Kv43;
  b4Kv43;
  baKv43;
  betaa0Kv43;
  betai0Kv43;
  biKv43;
  f1Kv43;
  f2Kv43;
  f3Kv43;
  f4Kv43;
  i_stim;
  GNa1;
  aa2;
  aa3;
  bb2;
  bb3;
  mu1_1;
  mu2_1;
  GNa;
  mu1_2;
  mu2_2;
  Faraday;
  RTF;
  Rgas;
  Temp;
}.param();

