/*
This file was generated by Myokit.

author: Michael clerx
desc: Stewart-2009 model, adapted from CellML.

The original cellml meta data follows below.

- - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - - -
Penny Noble
DPAG, University of Oxford

Model Status
- - - - - - -
This CellML ersion of the model has been checked in COR and OpenCell. The
units are consistent and the model runs to recreate the published results.

Model Structure
- - - - - - - -
In the paper described here, Philip Stewart and colleagues present a
details of their newly developed model for the human Purkinje cell
including validation against experimental data. Ionic mechanisms underlying
the heterogeneity between the Purkinje fibre and ventricular action
potentials in humans and other species were analysed. The newly developed
Purkinje fibre cell model adds a new member to the family of human cardiac
cell models developed previously for the sino-atrial node, atrial and
ventricular cells, which can be incorporated into an anatomical model of
human heart with details of its electrophysiological heterogeneity and
anatomical complexity.

The original paper reference is cited below:
- - - - - - - - - - - - - - - - - - - - - - -
Mathematical model of the electrical action potential of Purkinje fibre
cells
Philip Stewart, Oleg V. Aslanidi, Denis Noble, Penelope J. Noble, Mark R.
Boyett, and Henggui Zhang, 2009
Philosophical Transactions of the Royal Society, 367, 2225-2255.
PubMed ID: 19414454
name: Stewart-2009

*/

V; .nodal(); .external(Vm);
Iion; .nodal(); .external();

V_init = -6.91370441635999953e+01;
Ca_i_init =  1.01878186157000001e-04;
Ca_SR_init =  3.10836886658999978e+00;
Ca_ss_init =  4.46818714055000001e-04;
R_prime_init =  9.91580051908000026e-01;
Na_i_init =  8.80420286532000063e+00;
K_i_init =  1.36781894160000007e+02;
y_init =  4.57562667986999988e-02;
Xr1_init =  5.50281999718999978e-03;
Xr2_init =  3.13213286438000005e-01;
Xs_init =  9.53708522974999924e-03;
m_init =  4.17391656295000024e-02;
h_init =  1.90678733734999994e-01;
j_init =  2.38219836153999998e-01;
d_init =  2.87906256205999983e-04;
f_init =  9.89328560287999981e-01;
f2_init =  9.95474890441999993e-01;
fCass_init =  9.99955429597999990e-01;
s_init =  9.63861017995000013e-01;
r_init =  1.03618091196999999e-03;

// calcium
Buf_c = 0.2;
Buf_sr = 10.0;
Buf_ss = 0.4;
diff_Ca_SR = Ca_sr_bufsr * (i_up - (i_rel + i_leak));
diff_Ca_i = Ca_i_bufc * ((i_leak - i_up) * V_sr / V_c + i_xfer - ICa_cyt * Cm / (2.0 * V_c * F));
Ca_i_bufc = 1.0 / (1.0 + Buf_c * K_buf_c / pow(Ca_i + K_buf_c, 2.0));
Ca_sr_bufsr = 1.0 / (1.0 + Buf_sr * K_buf_sr / pow(Ca_SR + K_buf_sr, 2.0));
diff_Ca_ss = Ca_ss_bufss * (-1.0 * i_CaL * Cm / (2.0 * 1.0 * V_ss * F) + i_rel * V_sr / V_ss - i_xfer * V_c / V_ss);
Ca_ss_bufss = 1.0 / (1.0 + Buf_ss * K_buf_ss / pow(Ca_ss + K_buf_ss, 2.0));
EC = 1.5;
ICa_cyt = i_b_Ca + i_p_Ca - 2.0 * i_NaCa;
ICa_tot = ICa_cyt + i_CaL;
K_buf_c = 0.001;
K_buf_sr = 0.3;
K_buf_ss = 0.00025;
K_up = 0.00025;
O = k1 * pow(Ca_ss, 2.0) * R_prime / (k3 + k1 * pow(Ca_ss, 2.0));
diff_R_prime = -k2 * Ca_ss * R_prime + k4 * (1.0 - R_prime);
V_leak = 0.00036;
V_rel = 0.102;
V_sr = 0.001094;
V_ss = 5.468e-05;
V_xfer = 0.0038;
Vmax_up = 0.006375;
i_leak = V_leak * (Ca_SR - Ca_i);
i_rel = V_rel * O * (Ca_SR - Ca_ss);
i_up = Vmax_up / (1.0 + pow(K_up, 2.0) / pow(Ca_i, 2.0));
i_xfer = V_xfer * (Ca_ss - Ca_i);
k1 = k1_prime / kcasr;
k1_prime = 0.15;
k2 = k2_prime * kcasr;
k2_prime = 0.045;
k3 = 0.06;
k4 = 0.005;
kcasr = max_sr - (max_sr - min_sr) / (1.0 + pow(EC / Ca_SR, 2.0));
max_sr = 2.5;
min_sr = 1.0;

// ibca
g_bca = 0.000592;
i_b_Ca = g_bca * (V - E_Ca);

// ibna
g_bna = 0.00029;
i_b_Na = g_bna * (V - E_Na);

// ical
ical_d_alpha_d = 1.4 / (1.0 + exp((-35.0 - V) / 13.0)) + 0.25;
ical_d_beta_d = 1.4 / (1.0 + exp((V + 5.0) / 5.0));
d_inf = 1.0 / (1.0 + exp((-8.0 - V) / 7.5));
gamma_d = 1.0 / (1.0 + exp((50.0 - V) / 20.0));
tau_d = 1.0 * ical_d_alpha_d * ical_d_beta_d + gamma_d;
f_inf = 1.0 / (1.0 + exp((V + 20.0) / 7.0));
tau_f = 1102.5 * exp(-pow(V + 27.0, 2.0) / 225.0) + 200.0 / (1.0 + exp((13.0 - V) / 10.0)) + 180.0 / (1.0 + exp((V + 30.0) / 10.0)) + 20.0;
f2_inf = 0.67 / (1.0 + exp((V + 35.0) / 7.0)) + 0.33;
tau_f2 = 562.0 * exp(-pow(V + 27.0, 2.0) / 240.0) + 31.0 / (1.0 + exp((25.0 - V) / 10.0)) + 80.0 / (1.0 + exp((V + 30.0) / 10.0));
diff_fCass = (fCass_inf_var - fCass) / fCass_tau_fCass;
fCass_inf_var = 0.6 / (1.0 + pow(Ca_ss / 0.05, 2.0)) + 0.4;
fCass_tau_fCass = 80.0 / (1.0 + pow(Ca_ss / 0.05, 2.0)) + 2.0;
g_CaL = 3.98e-05;
i_CaL = ((fabs(V - 15.0) < 1e-06) ? a_1 * (b - Ca_o) / (2.0 * FRT) : numer / denom);
a_1 = g_CaL * d * f * f2 * fCass * 4.0 * FFRT;
b = 0.25 * Ca_ss;
denom = expm1(2.0 * (V - 15.0) * FRT);
numer = a_1 * (V - 15.0) * (b * exp((V - 15.0) * 2.0 * FRT) - Ca_o);

// if
i_f_K = y * g_f_K * (V - E_K);
g_f_K = 0.0234346;
i_f_Na = y * g_f_Na * (V - E_Na);
g_f_Na = 0.0145654;
y_alpha_y = 1.0 * exp(-2.9 - 0.04 * V);
y_beta_y = 1.0 * exp(3.6 + 0.11 * V);
tau_y = 4000.0 / (y_alpha_y + y_beta_y);
y_inf = 1.0 / (1.0 + exp((V + 80.6) / 6.8));

// ik
g_K1 = 0.065;
i_K1 = g_K1 * xK1_inf_var * (V - 8.0 - E_K);
xK1_inf_var = 1.0 / (1.0 + exp(0.1 * (V + 75.44)));

// ikr
Xr1_alpha_xr1 = 450.0 / (1.0 + exp((-45.0 - V) / 10.0));
Xr1_beta_xr1 = 6.0 / (1.0 + exp((V + 30.0) / 11.5));
tau_Xr1 = 1.0 * Xr1_alpha_xr1 * Xr1_beta_xr1;
Xr1_inf = 1.0 / (1.0 + exp((-26.0 - V) / 7.0));
Xr2_alpha_xr2 = 3.0 / (1.0 + exp((-60.0 - V) / 20.0));
Xr2_beta_xr2 = 1.12 / (1.0 + exp((V - 60.0) / 20.0));
tau_Xr2 = 1.0 * Xr2_alpha_xr2 * Xr2_beta_xr2;
Xr2_inf = 1.0 / (1.0 + exp((V + 88.0) / 24.0));
i_Kr = g_Kr * sqrt(K_o / 5.4) * Xr1 * Xr2 * (V - E_K);
g_Kr = 0.0918;

// iks
Xs_alpha_xs = 1400.0 / sqrt(1.0 + exp((5.0 - V) / 6.0));
Xs_beta_xs = 1.0 / (1.0 + exp((V - 35.0) / 15.0));
tau_Xs = 1.0 * Xs_alpha_xs * Xs_beta_xs + 80.0;
Xs_inf = 1.0 / (1.0 + exp((-5.0 - V) / 14.0));
g_Ks = 0.2352;
i_Ks = g_Ks * pow(Xs, 2.0) * (V - E_Ks);

// ina
g_Na = 130.5744;
h_alpha = ((V < -40.0) ? 0.057 * exp(-(V + 80.0) / 6.8) : 0.0);
h_beta = ((V < -40.0) ? 2.7 * exp(0.079 * V) + 310000.0 * exp(0.3485 * V) : 0.77 / (0.13 * (1.0 + exp((V + 10.66) / -11.1))));
h_inf = 1.0 / pow(1.0 + exp((V + 71.55) / 7.43), 2.0);
tau_h = 1.0 / (h_alpha + h_beta);
i_Na = g_Na * pow(m, 3.0) * h * j * (V - E_Na);
j_alpha = ((V < -40.0) ? (-25428.0 * exp(0.2444 * V) - 6.948e-06 * exp(-0.04391 * V)) * (V + 37.78) / (1.0 + exp(0.311 * (V + 79.23))) : 0.0);
j_beta = ((V < -40.0) ? 0.02424 * exp(-0.01052 * V) / (1.0 + exp(-0.1378 * (V + 40.14))) : 0.6 * exp(0.057 * V) / (1.0 + exp(-0.1 * (V + 32.0))));
j_inf = 1.0 / pow(1.0 + exp((V + 71.55) / 7.43), 2.0);
tau_j = 1.0 / (j_alpha + j_beta);
m_alpha = 1.0 / (1.0 + exp((-60.0 - V) / 5.0));
m_beta = 0.1 / (1.0 + exp((V + 35.0) / 5.0)) + 0.1 / (1.0 + exp((V - 50.0) / 200.0));
m_inf = 1.0 / pow(1.0 + exp((-56.86 - V) / 9.03), 2.0);
tau_m = m_alpha * m_beta;

// inaca
i_NaCa = K_NaCa * (exp(g * vfrt_1) * pow(Na_i, 3.0) * Ca_o - exp((g - 1.0) * vfrt_1) * nao3 * Ca_i * i_NaCa_alpha) / (km * (1.0 + K_sat * exp((g - 1.0) * V * FRT)));
K_NaCa = 1000.0;
K_sat = 0.1;
Km_Ca = 1.38;
Km_Nai = 87.5;
i_NaCa_alpha = 2.5;
g = 0.35;
km = (pow(Na_o, 3.0) + pow(Km_Nai, 3.0)) * (Km_Ca + Ca_o);
nao3 = pow(Na_o, 3.0);
vfrt_1 = V * FRT;

// inak
K_mNa = 40.0;
K_mk = 1.0;
P_NaK = 2.724;
i_NaK = P_NaK * K_o / (K_o + K_mk) * Na_i / (Na_i + K_mNa) / (1.0 + 0.1245 * exp(-0.1 * vfrt_2) + 0.0353 * exp(-vfrt_2));
vfrt_2 = V * FRT;

// ipca
K_pCa = 0.0005;
g_pCa = 0.1238;
i_p_Ca = g_pCa * Ca_i / (Ca_i + K_pCa);

// ipk
g_pK = 0.0146;
i_p_K = g_pK * (V - E_K) / (1.0 + exp((25.0 - V) / 5.98));

// isus
a_2 = 1.0 / (1.0 + exp((5.0 - V) / 17.0));
g_sus = 0.0227;
i_sus = g_sus * a_2 * (V - E_K);

// ito
g_to = 0.08184;
i_to = g_to * r * s * (V - E_K);
r_inf = 1.0 / (1.0 + exp((20.0 - V) / 13.0));
tau_r = 10.45 * exp(-pow(V + 40.0, 2.0) / 1800.0) + 7.3;
s_inf = 1.0 / (1.0 + exp((V + 27.0) / 13.0));
tau_s = 85.0 * exp(-pow(V + 25.0, 2.0) / 320.0) + 5.0 / (1.0 + exp((V - 40.0) / 5.0)) + 42.0;

// membrane
i_ion = INa_tot + IK_tot + ICa_tot;
i_stim = 0.0 * amplitude;
amplitude = -30.0;

// nernst
Ca_o = 2.0;
E_Ca = 0.5 * RTF * log(Ca_o / Ca_i);
E_K = RTF * log(K_o / K_i);
E_Ks = RTF * log((K_o + P_kna * Na_o) / (K_i + P_kna * Na_i));
E_Na = RTF * log(Na_o / Na_i);
K_o = 5.4;
Na_o = 140.0;
P_kna = 0.03;

// phys
Cm = 0.185;
F = 9.64853414999999950e+04;
FFRT = F * FRT;
FRT = F / R / T;
R = 8314.472;
RTF = R * T / F;
T = 310.0;
V_c = 0.016404;

// potassium
IK_tot = i_K1 + i_to + i_f_K + i_sus + i_Kr + i_Ks + i_p_K - 2.0 * i_NaK;
diff_K_i = -IK_tot / (V_c * F) * Cm;

// sodium
INa_tot = i_Na + i_b_Na + i_f_Na + 3.0 * i_NaK + 3.0 * i_NaCa;
diff_Na_i = -INa_tot / (V_c * F) * Cm;

// Sum of currents
Iion = i_ion + i_stim;

// Solve non-HH and non-Markov states with CVODE
group {
  Ca_i;
  Ca_SR;
  Ca_ss;
  R_prime;
  Na_i;
  K_i;
  fCass;
}.method(cvode);

// Trace all currents and state variables
group {
  i_ion;
  i_stim;
  V;
  Ca_i;
  Ca_SR;
  Ca_ss;
  R_prime;
  Na_i;
  K_i;
  y;
  Xr1;
  Xr2;
  Xs;
  m;
  h;
  j;
  d;
  f;
  f2;
  fCass;
  s;
  r;
}.trace();

// Parameters
group {
  Buf_c;
  Buf_sr;
  Buf_ss;
  EC;
  K_buf_c;
  K_buf_sr;
  K_buf_ss;
  K_up;
  V_leak;
  V_rel;
  V_sr;
  V_ss;
  V_xfer;
  Vmax_up;
  k1_prime;
  k2_prime;
  k3;
  k4;
  max_sr;
  min_sr;
  g_bca;
  g_bna;
  g_CaL;
  g_K1;
  g_Ks;
  g_Na;
  K_mNa;
  K_mk;
  P_NaK;
  K_pCa;
  g_pCa;
  g_pK;
  g_sus;
  g_to;
  i_stim;
  Ca_o;
  K_o;
  Na_o;
  P_kna;
  Cm;
  F;
  FFRT;
  FRT;
  R;
  RTF;
  T;
  V_c;
}.param();

