/*
This file was generated by Myokit.

author: Michael Clerx
desc: Implementation of the Tran2009 model, as described in [1].

[1] Bifurcation and Chaos in a Model of Cardiac Early Afterdepolarizations
Tran, Sato, Yochelis, Weiss, Garfinkel, and Qu
Phys Rev Lett. 2009 June 26 102(25): 258103.

http://dx.doi.org/10.1103/PhysRevLett.102.258103
name: Tran2009

*/

V; .nodal(); .external(Vm);
Iion; .nodal(); .external();

V_init = -8.43801107370999972e+01;
d_init =  3.02126301779860997e-03;
f_init =  9.99967936476324981e-01;
x_init =  4.17603108167287004e-02;

// background_current
E_b = -59.87;
g_b = 0.03921;
i_b = g_b * (V - E_b);

// ca_slow_inward
E_si = 80.0;
diff_d = (ca_slow_inward_d_alpha * (1.0 - d) - ca_slow_inward_d_beta * d) / modification_alpha;
ca_slow_inward_d_alpha = 0.095 * exp(-0.01 * (V - 5.0)) / (1.0 + exp(-0.072 * (V - 5.0)));
ca_slow_inward_d_beta = 0.07 * exp(-0.017 * (V + 44.0)) / (1.0 + exp(0.05 * (V + 44.0)));
diff_f = (f_alpha * (1.0 - f) - f_beta * f) / modification_beta;
f_alpha = 0.012 * exp(-0.008 * (V + 28.0)) / (1.0 + exp(0.15 * (V + 28.0)));
f_beta = 0.0065 * exp(-0.02 * (V + 30.0)) / (1.0 + exp(-0.2 * (V + 30.0)));
i_si = gBarSi * d * f * (V - E_si);

// ions
Ki = 145.0;
Ko = 5.4;

// k_plateau
E_Kp = E_K1;
g_Kp = 0.0183;
i_Kp = g_Kp * Kp * (V - E_Kp);
Kp = 1.0 / (1.0 + exp((7.488 - V) / 5.98));

// k_time_dependent
E_K = -77.0;
g_K = 0.282 * sqrt(Ko / 5.4);
i_K = g_K * x * xi * (V - E_K);
diff_x = (x_alpha * (1.0 - x) - x_beta * x) / gamma;
x_alpha = 0.0005 * exp(0.083 * (V + 50.0)) / (1.0 + exp(0.057 * (V + 50.0)));
x_beta = 0.0013 * exp(-0.06 * (V + 20.0)) / (1.0 + exp(-0.04 * (V + 20.0)));
xi = ((V > -100.0) ? 2.837 * (expm1(0.04 * (V + 77.0))) / ((V + 77.0) * exp(0.04 * (V + 35.0))) : 1.0);

// k_time_independent
E_K1 = RTF * log(Ko / Ki);
g_K1 = 0.6047 * sqrt(Ko / 5.4);
i_K1 = g_K1 * (i_K1_alpha / (i_K1_alpha + i_K1_beta)) * (V - E_K1);
i_K1_alpha = 1.02 / (1.0 + exp(0.2385 * (V - E_K1 - 59.215)));
i_K1_beta = (0.49124 * exp(0.08032 * (V - E_K1 + 5.476)) + exp(0.06175 * (V - E_K1 - 594.31))) / (1.0 + exp(-0.5143 * (V - E_K1 + 4.753)));

// membrane
I_stim = 0.0 * stim_amplitude;
stim_amplitude = -73.0;

// modification
modification_alpha = 1.0;
modification_beta = 1.0;
gBarSi = 0.15;
gamma = 2.5;

// physics
F = 96484.6;
R = 8314.0;
RTF = R * T / F;
T = 310.0;

// Sum of currents
Iion = I_stim + i_K + i_K1 + i_Kp + i_b + i_si;

// Solve non-HH and non-Markov states with CVODE
group {
  d;
  f;
  x;
}.method(cvode);

// Trace all currents and state variables
group {
  I_stim;
  i_K;
  i_K1;
  i_Kp;
  i_b;
  i_si;
  V;
  d;
  f;
  x;
}.trace();

// Parameters
group {
  E_b;
  g_b;
  E_si;
  Ki;
  Ko;
  E_Kp;
  g_Kp;
  E_K;
  g_K;
  E_K1;
  g_K1;
  I_stim;
  stim_amplitude;
  modification_alpha;
  modification_beta;
  gBarSi;
  gamma;
  F;
  R;
  RTF;
  T;
}.param();

